# Generated by Configurator on Mon Feb 03 15:21:02 EST 2025

# Reset
Property,Core,Initialize,0

# Devices
Device,COM9,SerialManager,COM9
Device,COM7,SerialManager,COM7
Device,Andor,Andor,Andor
Device,Arduino,FreeSerialPort,FreeSerialPort
Device,iChrome-MLE,Toptica_iChrome_MLE,iChrome-MLE
Device,Retra UV LED,Lumencor,LightEngine
Device,FreeSerialPort,FreeSerialPort,FreeSerialPort

# Pre-init settings for devices
Property,Andor,Camera,| iXon Ultra | DU888_BVF | 14362 |
Property,Arduino,Port,COM9
Property,iChrome-MLE,Port,COM7
Property,Retra UV LED,Connection,COM8
Property,Retra UV LED,Model,GEN3
Property,FreeSerialPort,Port,COM9

# Pre-init settings for COM ports
Property,COM9,AnswerTimeout,500.0000
Property,COM9,BaudRate,115200
Property,COM9,DTR,Disable
Property,COM9,DataBits,8
Property,COM9,DelayBetweenCharsMs,0.0000
Property,COM9,Fast USB to Serial,Disable
Property,COM9,Handshaking,Off
Property,COM9,Parity,None
Property,COM9,StopBits,1
Property,COM9,Verbose,1
Property,COM7,AnswerTimeout,500.0000
Property,COM7,BaudRate,115200
Property,COM7,DTR,Disable
Property,COM7,DataBits,8
Property,COM7,DelayBetweenCharsMs,0.0000
Property,COM7,Fast USB to Serial,Enable
Property,COM7,Handshaking,Off
Property,COM7,Parity,None
Property,COM7,StopBits,1
Property,COM7,Verbose,1

# Hub (parent) references

# Initialize
Property,Core,Initialize,1

# Delays

# Focus directions

# Roles
Property,Core,Camera,Andor
Property,Core,Shutter,Retra UV LED
Property,Core,AutoShutter,0

# Camera-synchronized devices

# Labels
# iChrome-MLE
Label,iChrome-MLE,2,State-2
Label,iChrome-MLE,1,State-1
Label,iChrome-MLE,0,State-0

# Configuration presets
# Group: Channel

# Group: System
# Preset: Startup



# PixelSize settings

