# Generated by Configurator on Thu Jul 10 14:32:30 EDT 2025

# Reset
Property,Core,Initialize,0

# Devices
Device,COM3,SerialManager,COM3
Device,COM4,SerialManager,COM4
Device,Arduino,FreeSerialPort,FreeSerialPort
Device,iChrome-MLE,Toptica_iChrome_MLE,iChrome-MLE
Device,Retra UV LED,Lumencor,LightEngine
Device,Andor,Andor,Andor

# Pre-init settings for devices
Property,Arduino,Port,COM3
Property,iChrome-MLE,Port,COM4
Property,Retra UV LED,Connection,COM5
Property,Retra UV LED,Model,GEN3
Property,Andor,Camera,| iXon Ultra | DU888_BV | 11177 |

# Pre-init settings for COM ports
Property,COM3,AnswerTimeout,500.0000
Property,COM3,BaudRate,115200
Property,COM3,DTR,Disable
Property,COM3,DataBits,8
Property,COM3,DelayBetweenCharsMs,0.0000
Property,COM3,Fast USB to Serial,Disable
Property,COM3,Handshaking,Off
Property,COM3,Parity,None
Property,COM3,StopBits,1
Property,COM3,Verbose,1
Property,COM4,AnswerTimeout,500.0000
Property,COM4,BaudRate,115200
Property,COM4,DTR,Disable
Property,COM4,DataBits,8
Property,COM4,DelayBetweenCharsMs,0.0000
Property,COM4,Fast USB to Serial,Disable
Property,COM4,Handshaking,Off
Property,COM4,Parity,None
Property,COM4,StopBits,1
Property,COM4,Verbose,1

# Hub (parent) references

# Initialize
Property,Core,Initialize,1

# Delays

# Focus directions

# Roles
Property,Core,Camera,Andor
Property,Core,Shutter,Retra UV LED
Property,Core,AutoShutter,1

# Camera-synchronized devices

# Labels
# iChrome-MLE
Label,iChrome-MLE,2,State-2
Label,iChrome-MLE,1,State-1
Label,iChrome-MLE,0,State-0

# Configuration presets
# Group: Channel

# Group: System
# Preset: Startup



# PixelSize settings

