# Generated by Configurator on Tue Aug 19 09:20:08 EDT 2025

# Reset
Property,Core,Initialize,0

# Devices
Device,COM3,SerialManager,COM3
Device,COM4,SerialManager,COM4
Device,Andor,Andor,Andor
Device,Arduino,FreeSerialPort,FreeSerialPort
Device,iChrome-MLE,Toptica_iChrome_MLE,iChrome-MLE

# Pre-init settings for devices
Property,Andor,Camera,| iXon Ultra | DU888_BV | 11177 |
Property,Arduino,Port,COM3
Property,iChrome-MLE,Port,COM4

# Pre-init settings for COM ports
Property,COM3,AnswerTimeout,500.0000
Property,COM3,BaudRate,115200
Property,COM3,DTR,Disable
Property,COM3,DataBits,8
Property,COM3,DelayBetweenCharsMs,0.0000
Property,COM3,Fast USB to Serial,Disable
Property,COM3,Handshaking,Off
Property,COM3,Parity,None
Property,COM3,StopBits,1
Property,COM3,Verbose,1
Property,COM4,AnswerTimeout,500.0000
Property,COM4,BaudRate,115200
Property,COM4,DTR,Disable
Property,COM4,DataBits,8
Property,COM4,DelayBetweenCharsMs,0.0000
Property,COM4,Fast USB to Serial,Disable
Property,COM4,Handshaking,Off
Property,COM4,Parity,None
Property,COM4,StopBits,1
Property,COM4,Verbose,1

# Hub (parent) references

# Initialize
Property,Core,Initialize,1

# Delays

# Focus directions

# Roles
Property,Core,Camera,Andor
Property,Core,AutoShutter,1

# Camera-synchronized devices

# Labels
# iChrome-MLE
Label,iChrome-MLE,2,State-2
Label,iChrome-MLE,1,State-1
Label,iChrome-MLE,0,State-0

# Configuration presets
# Group: Channel

# Group: System
# Preset: Startup



# PixelSize settings

